PsychoPy2experiment version="1.79.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = coffee_distCheck
  Units = use prefs
  Screen = 1
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Routines
  Routine Thanks
    TextComponent text_4
      text = I'm fat and ugly
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        With this program we are defineing your distance in which the switch occurs.
        Therefore you are asked to fixate the fixation cross in the middle of the screen and report to press 'Space' as soon as you see a switch.
        Do not press 'Space' after that but wait instead for the end of the routine.

        Press "Space" to continue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine DistanceCheck
    CodeComponent codeDistanceCheckUP
      Begin Experiment:
        ScreenH = 34.5
        ScreenV = 19

        YPOS = 0.1
        XPOS = 0.5

        demValues = []


        W = 0.05
        H = 0.075

        changeRate=0.025

        PressedOnce = 0
      Each Frame:
        if key_resp_3.status == STARTED:
            theseKeys = event.getKeys(keyList=['space'])
            if len(theseKeys) > 0:  # at least one key was pressed
                key_resp_3.keys = theseKeys[-1]  # just the last key pressed
                if PressedOnce == 0:
                    PressedOnce = 1
                    print YPOS
                    name = "./DISTANCES/%s"%(expInfo['participant'])
                    demValues.append(YPOS)
                    repetitionsOfDistanceCheck.finished=True
                else:
                    print "ERROR! You pressd before"
      Begin Routine:
        YPOS= YPOS + changeRate
    ImageComponent blockLU
      stopVal [duration (s)] = 0.4
      pos [set every repeat] = [-XPOS, YPOS]
      startVal [time (s)] = 0.0
      image = cube.png
      size = [W, H]
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    ImageComponent blockRD
      stopVal [duration (s)] = 0.4
      pos [set every repeat] = [XPOS, -YPOS]
      startVal [time (s)] = 0.0
      image = cube.png
      size = [W, H]
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    ImageComponent blockLD
      stopVal [duration (s)] = 0.4
      pos [set every repeat] = [-XPOS, -YPOS]
      startVal [time (s)] = 0.4
      image = cube.png
      size = [W, H]
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    ImageComponent cubeRU
      stopVal [duration (s)] = 0.4
      pos [set every repeat] = [XPOS, YPOS]
      startVal [time (s)] = 0.4
      image = cube.png
      size = [W, H]
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    ImageComponent fixcross
      stopVal [duration (s)] = 0.8
      startVal [time (s)] = 0.0
      image = fixcross.png
      size = [0.1, 0.1]
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 0.8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine BreakScreen
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $textPause
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Begin Experiment:
        ROUND = 1
        textPause = "End of Round %s. %s to go! \nTake a break and press 'Space' as soon as you are ready" % (ROUND,6-ROUND)
      Begin Routine:
        ROUND = ROUND + 1
        textPause = "End of Round %s. %s to go! \nTake a break and press 'Space' as soon as you are ready" % (ROUND,6-ROUND)
  Routine whatFirst
    TextComponent text_2
      text = Which direction of the cubes moving did you see first?
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    RatingScaleComponent rating
      pos = 0, -0.4
      high = 2
      startVal [time (s)] = 0.0
      size = 1.0
      choiceLabelsAboveLine = False
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      categoryChoices = Horizontal, Vertical
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    CodeComponent code_2
      Each Frame:
        if t > 0.0:
                rating.draw()
                continueRoutine = rating.noResponse
                if rating.noResponse == False:
                    name = "./DISTANCES/%s"%(expInfo['participant'])
                    with open(name, "a") as myfile:
                        myfile.write("\n")
                        myfile.write(rating.getRating())
Flow
  Routine trial
  LoopInitiator repetitionsOfDistanceCheck loopType="TrialHandler"
    loopType = random
    nReps = 40
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    Routine DistanceCheck
  LoopTerminator repetitionsOfDistanceCheck
  Routine Thanks
